PsychoPy2experiment version="1.73.03"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine PDAS
    TextComponent Cue_2
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
              You are now playing
        the PRISONER'S DILEMMA
          APPROVAL STAGE game
                 with your partner
    PatchComponent game_2
      stopVal [duration (s)] = 4.0
      sf = None
      texture resolution = 512
      startVal [time (s)] = 4.0
      image = Screenshot.png
      size = [2, 2]
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    TextComponent choose_2
      text = Do you cooperate or default?
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 8.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 4.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'y','n'
      startVal [time (s)] = 8.0
      store = all keys
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    TextComponent wait_2
      text = Wait
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 12.0
      letterHeight = 0.1
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    TextComponent feed_2
      text = Your partner chose to
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 14.0
      letterHeight = 0.1
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    TextComponent feed_b_2
      color = red
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 14.0
      letterHeight = 0.1
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      text:
        (cooperate or default)
    TextComponent AS
      text = Do you approve or disapprove?
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 16.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 4.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'y','n'
      startVal [time (s)] = 16.0
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    TextComponent feed_3
      text = Your partner chose to
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 20.0
      letterHeight = 0.1
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    TextComponent feed_b_3
      color = red
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 20.0
      letterHeight = 0.1
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      text:
        (approve or disapprove)
  Routine FIX
    TextComponent text
      text = +
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine PD
    TextComponent Cue
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
              You are now playing
        the PRISONER'S DILEMMA
           game with your partner
    PatchComponent game
      stopVal [duration (s)] = 4.0
      interpolate = nearest
      sf = None
      texture resolution = 512
      startVal [time (s)] = 4.0
      image = Screenshot.png
      size = [2,2]
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    TextComponent choose
      text = Do you cooperate or default?
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 8.0
      letterHeight = 0.1
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    KeyboardComponent key_resp
      stopVal [duration (s)] = 4.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'y','n'
      startVal [time (s)] = 8.0
      store = all keys
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    TextComponent wait
      text = Wait
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 12.0
      letterHeight = 0.1
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    TextComponent feed
      text = Your partner chose to
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 14.0
      letterHeight = 0.1
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    TextComponent feed_b
      color = red
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 14.0
      letterHeight = 0.1
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      text:
        (cooperate or default)
Flow
  Routine FIX
  Routine PD
  Routine FIX
  Routine PDAS
